PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = memory experiment
  keyboardBackend = ioHub
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Routines
  Routine welcomeScreen
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome to the experiment
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endScreen
    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thanks for Participating
    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine testTrial
    CodeComponent codeTest
      Code Type = Auto->JS
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      Begin Routine:
        #check if our old_new statuus is old or new and assign yn_key
        if(old_new == "old" ):
            yn_key = 'y'
        else:
            yn_key = 'n'
    TextComponent textTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_word
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    KeyboardComponent keyTest
      allowedKeys = 'y','n'
      correctAns = $yn_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testInstructions
    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get ready for the test
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    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyTrial
    TextComponent textStudy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stim_word
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  Routine testFeedback
    CodeComponent codeFeedback
      Code Type = Auto->JS
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      Begin Routine:
        if(old_new == "old"):
            if(keyTest.corr == 1):
                 feedback_text = "Congratulations! it was old and you knew"
            elif(keyTest.corr == 0):
                 feedback_text = "Sorry!!! The word was old"
        else:
            if(keyTest.corr == 1):
                 feedback_text = "Congratulations! You didn't get fooled"
            elif(keyTest.corr == 0):
                 feedback_text = "Sorry!!! That was a new item"
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_text
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Flow
  Routine welcomeScreen
  LoopInitiator trialsStudy loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'computer'},
      {'stim_word': 'mountain'},
      {'stim_word': 'hill'},
      {'stim_word': 'green'},
      {'stim_word': 'machine'},
      {'stim_word': 'circle'}]
    Routine studyTrial
  LoopTerminator trialsStudy
  Routine testInstructions
  LoopInitiator trialsTest loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'computer', 'old_new': 'old'},
      {'stim_word': 'mountain', 'old_new': 'old'},
      {'stim_word': 'hill', 'old_new': 'old'},
      {'stim_word': 'green', 'old_new': 'old'},
      {'stim_word': 'machine', 'old_new': 'old'},
      {'stim_word': 'circle', 'old_new': 'old'},
      {'stim_word': 'android ', 'old_new': 'new '},
      {'stim_word': 'button ', 'old_new': 'new '},
      {'stim_word': 'country', 'old_new': 'new '}]
    Routine testTrial
    Routine testFeedback
  LoopTerminator trialsTest
  Routine endScreen
