PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1280, 800]
  expName = Intentional Binding
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 7.0
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    KeyboardComponent key_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 7.0
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  Routine beep
    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Any text

        Report the delay between key press and beep sound (0-999); Click submit after entering the value
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Data/ib_cons.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'delay': 0.1, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
